<?xml version="1.0" encoding="utf-8" ?>
<Feature SiLA2Version="1.0" FeatureVersion="1.0" Originator="de.cetoni" Category="pumps.syringepumps" xmlns="http://www.sila-standard.org" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xsi:schemaLocation="http://www.sila-standard.org https://gitlab.com/SiLA2/sila_base/raw/master/schema/FeatureDefinition.xsd">
    <Identifier>PumpDriveControlService</Identifier>
    <DisplayName>Pump Drive Control Service</DisplayName>
    <Description>
        Functionality to control and maintain the drive that drives the pump.
        Allows to initialize a pump (e.g. by executing a reference move) and obtain status information about the pump drive's current state (i.e. enabled/disabled).
        The initialization has to be successful in order for the pump to work correctly and dose fluids. If the initialization fails, the DefinedExecutionError InitializationFailed is thrown.
    </Description>

    <!-- Commands -->
    <Command>
        <Identifier>InitializePumpDrive</Identifier>
        <DisplayName>Initialize Pump Drive</DisplayName>
        <Description>Initialize the pump drive (e.g. by executing a reference move).</Description>
        <Observable>Yes</Observable>
        <DefinedExecutionErrors>
            <Identifier>InitializationFailed</Identifier>
        </DefinedExecutionErrors>
    </Command>
    <Command>
        <Identifier>EnablePumpDrive</Identifier>
        <DisplayName>Enable Pump Drive</DisplayName>
        <Description>Set the pump into enabled state.</Description>
        <Observable>No</Observable>
    </Command>
    <Command>
        <Identifier>DisablePumpDrive</Identifier>
        <DisplayName>Disable Pump Drive</DisplayName>
        <Description>Set the pump into disabled state.</Description>
        <Observable>No</Observable>
    </Command>
    <Command>
        <Identifier>RestoreDrivePositionCounter</Identifier>
        <DisplayName>Restore Drive Position Counter</DisplayName>
        <Description>Restore the internal hardware position counter value of the pump drive. This function is not required and not supported for devices that have an absolute encoder such as the new Nemesys 4 devices Nemesys S and Nemesys M.</Description>
        <Observable>No</Observable>
        <Parameter>
            <Identifier>DrivePositionCounterValue</Identifier>
            <DisplayName>Drive Position Counter Value</DisplayName>
            <Description>The position counter value to restore</Description>
            <DataType>
                <Basic>Integer</Basic>
            </DataType>
        </Parameter>
        <DefinedExecutionErrors>
            <Identifier>NotSupported</Identifier>
        </DefinedExecutionErrors>
    </Command>

    <!-- Properties -->
    <Property>
        <Identifier>PumpDriveState</Identifier>
        <DisplayName>Pump Drive State</DisplayName>
        <Description>The current state of the pump. This is either 'Enabled', 'Disabled', or 'Initializing'. Only if the sate is 'Enabled', the pump can dose fluids.</Description>
        <Observable>Yes</Observable>
        <DataType>
            <Constrained>
                <DataType>
                    <Basic>String</Basic>
                </DataType>
                <Constraints>
                    <Set>
                        <Value>Enabled</Value>
                        <Value>Disabled</Value>
                        <Value>Initializing</Value>
                    </Set>
                </Constraints>
            </Constrained>
        </DataType>
    </Property>
    <Property>
        <Identifier>FaultState</Identifier>
        <DisplayName>Fault State</DisplayName>
        <Description>Returns if the pump is in fault state. If the value is true (i.e. the pump is in fault state), it can be cleared by calling EnablePumpDrive.</Description>
        <Observable>Yes</Observable>
        <DataType>
            <Basic>Boolean</Basic>
        </DataType>
    </Property>
    <Property>
        <Identifier>DrivePositionCounter</Identifier>
        <DisplayName>Drive Position Counter</DisplayName>
        <Description>Returns the value of the internal drive position counter. You can query this value and store it persistently somewhere before shutting down the device and restore it later using the RestoreDrivePositionCounter Command.</Description>
        <Observable>Yes</Observable>
        <DataType>
            <Basic>Integer</Basic>
        </DataType>
    </Property>

    <!-- Errors -->
    <DefinedExecutionError>
        <Identifier>InitializationFailed</Identifier>
        <DisplayName>Initialization Failed</DisplayName>
        <Description>The initialization did not end properly.</Description>
    </DefinedExecutionError>
    <DefinedExecutionError>
        <Identifier>InitializationNotFinished</Identifier>
        <DisplayName>Initialization Not Finished</DisplayName>
        <Description>There is already another initialization running that hasn't finished yet. Starting a new initialization move is not allowed.</Description>
    </DefinedExecutionError>
    <DefinedExecutionError>
        <Identifier>NotSupported</Identifier>
        <DisplayName>Not Supported</DisplayName>
        <Description>The Command is not supported by this device.</Description>
    </DefinedExecutionError>
</Feature>
